PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  color = black
  expName = stroop-J
  logging level = warning
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        本番です。

        画面に文字が出ます。
        できるだけ速くキーを押してください。

        　赤色の文字なら [←]
        　緑色の文字なら [↓]
        　青色の文字なら [→]

        では、始めます(Esc で中断)。
        何かキーを押してください。
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        3本の指をカーソルキーに置いてください。

        画面に文字が出ます。
        できるだけ速くキーを押してください。

        　赤色の文字なら [←]
        　緑色の文字なら [↓]
        　青色の文字なら [→]

        練習してから始めます(Esc で中断)。
        何かキーを押してください。
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        終わりです。
        ありがとうございました。
  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="正解! RT=%.3f" %(resp.rt)
        else:
          msg="残念!間違えたね"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 10
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
